PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant': '', 'session': 'ex. 23', 'date': 'ex. 11/20/2020'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Paper Folding PsychoPy
  logging level = debug
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Routines
  Routine instr
    TextComponent Instructions
      font = Times New Roman
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this task, you are to imagine the folding and unfolding of pieces of paper.

        In each problem in the test there are some figures drawn at the left and there are others drawn at the right. The figures at the left represent a square piece of paper being folded, and the last of these figures on the left will have small circles drawn on it to show where the paper has been punched.
    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent response2
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine Instr2
    TextComponent part1
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        As in the sample problem, in the following problems, all of the folds that are made are shown in the figures at the left before the answer choices. Remember, the paper is not turned or moved in any way except to make and unravel the folds in the figures. Additionally, remember that only one hole is punched through the paper.

        The correct answer is the figure that shows the proper positions of the holes when the paper is completely unfolded.
    KeyboardComponent RespInstr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent resp1
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine Begin
    TextComponent Part1
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Part 1 (3 minutes)


        Remember to press the number (1, 2, 3, 4, or 5) on your keyboard associated with the image to select it.
    KeyboardComponent Resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent resbeforetrial1
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine trial_1
    ImageComponent Questions_1
      image [set every repeat] = $ImageFile
      size = (1.4, 0.31)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent participant_response_1
      allowedKeys [set every repeat] = '1','2','3','4','5'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    TextComponent resptrial1
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press 1, 2, 3, 4, or 5 on your keyboard.
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    CodeComponent part1code
      Code Type = Auto->JS
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      Begin Experiment:
        countdownStarted = False
      Begin Routine:
        #Setting Clock
        if not countdownStarted:
            countdownClock = core.CountdownTimer(180.0)
            countdownStarted = True
      Each Frame:
        #Establishing and Displaying Timer
        timeRemaining = countdownClock.getTime()
        if timeRemaining <=0.00:
            continueRoutine = False
            trials.finished = True
            countdownStarted = False
            continueExperiment = True
        else:
            minutes = int (timeRemaining/60.00)
            seconds = int (timeRemaining - (minutes*60.00))
            timeText = str(minutes) + ':'  + str(seconds)
    TextComponent Show
      color = black
      font = Times New Roman
      letterHeight = 0.04
      pos = (-0.6, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine intermission
    TextComponent stop
      color = black
      font = Times New Roman
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = STOP!
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    TextComponent middle
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have finished Part I.

        When you are instructed to begin Part II, click any key on your keyboard.

        You will again have 3 minutes to finish Part II.
    KeyboardComponent key_response
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent respbeforetrial2
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine trial_2
    ImageComponent Questions_2
      image [set every repeat] = $ImageFile
      size = (1.4, 0.31)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent participant_response_2
      allowedKeys [set every repeat] = '1','2','3','4','5'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
      storeCorrect = True
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    TextComponent number
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press 1, 2, 3, 4, or 5 on your keyboard.
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    CodeComponent part2code
      Code Type = Auto->JS
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      Begin Experiment:
        countdownStarted=False
        secondLoop = 0
      Begin Routine:
        #Clock
        if secondLoop<=0:
            countdownClock = core.CountdownTimer(180)
            countdownStarted = True
            secondLoop = secondLoop +1
      Each Frame:
        #Creating Clock
        timeRemaining = countdownClock.getTime()
        if timeRemaining <=0.00:
            continueRoutine = False
            trials2.finished = True
            countdownStarted = False
            continueExperiment = True
        else:
            minutes = int (timeRemaining/60.00)
            seconds = int (timeRemaining - (minutes*60.00))
            timeText = str(minutes) + ':'  + str(seconds)
    TextComponent Show_2
      color = black
      font = Times New Roman
      letterHeight = 0.04
      pos = (-0.6, 0.4)
      startVal [time (s)] = 0.0
      text [set every frame] = $timeText
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  Routine sample
    ImageComponent image
      image [set every repeat] = $ImageFile
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'a','A','b','B','c','C','d','D','e','E'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine end
    TextComponent thankyou
      font = Times New Roman
      letterHeight = 0.07
      startVal [time (s)] = 0.0
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      text:
        You have now completed the experiment.

        Thank you for your participation!
    KeyboardComponent final
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent finalslide
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key on your keyboard to exit the experiment.
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  Routine samptrial
    ImageComponent image_2
      image = sample_task/sample.png
      size = (1, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine samtrial
    ImageComponent sampleimage
      image = sample_task/q1.png
      size = (1.4, 0.31)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = '1','2','3','4','5'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press 1, 2, 3, 4, or 5 on your keyboard.
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  Routine saminstr
    TextComponent ExProblem
      font = Times New Roman
      letterHeight = 0.04
      startVal [time (s)] = 0
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      text:
        Now try the sample problem on the next slide. In this problem, one hole is punched through the folded paper.

        Remember that the hole is punched through all the thicknesses of paper at that point.

        One of the five figures at the right will show where the holes could be when the paper is completely unfolded. You are to decide which one of these figures has the correct placement of the holes and click the correct number (1, 2, 3, 4, or, 5) on your keyboard that you feel corresponds with the correct answer.
    KeyboardComponent instruction
      correctAns = C
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_2
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine titlecard
    TextComponent Titlecard
      font = Times New Roman
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Paper Folding Experiment
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent response
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine instr_pt2
    TextComponent Instr_part2
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Soon, you will be given an example problem in which one hole has been punched through the folded paper. 
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent response3
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine Instructionspart2
    TextComponent secondslidein
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Your score on this test will be the questions marked correctly minus a fraction of questions marked incorrectly. Therefore, it will not be to your advantage to guess unless you are able to eliminate one or more of the answer choices as wrong.
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent resp4
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine Instructionspart3
    TextComponent text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This test has two parts. You will have 3 minutes for each of the two parts. You will not be able to go back to previous questions, so please be wary of the clock on the top left of your screen when proceeding.

        When the time is up, you will be automatically advanced to the next screen.
    KeyboardComponent response7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent resp5
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine analysistrial
    TextComponent text_4
      font = Times New Roman
      letterHeight = 0.04
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
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      text:
        Good job!
    ImageComponent image_3
      image = sample_task/q1.png
      pos = (0, 0.26)
      size = (0.7, .155)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent explanation
      font = Times New Roman
      letterHeight = 0.030
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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      text:
        Notice how in this sample problem, the first image on the left represented a full paper being folded upward “hot-dog style”. Next, a hole is punched on the left side of this paper. Understanding so, you must then choose from the following 5 answer choices on the right to choose what you think the unfolded paper should now look like having been hole-punched once.

        Remembering the hole punch goes through both sides of the paper, a hole punch on a hot-dog style half sheet would entail two hole punches on the left side of the paper when unfolded.

        The answer is 3!

        This is the same paper folding method that will be used for the following problems. Here, only one fold was made, hence there were 2 boxes on the left of the answer choices. But for other problems, keep in mind that there could be more than one fold made before a hole is punched through the paper.
    TextComponent text_7
      font = Times New Roman
      letterHeight = 0.040
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine titlecard
  Routine instr
  Routine saminstr
  LoopInitiator trials_3 loopType="TrialHandler"
    conditions = [OrderedDict([('ImageFIle', 'sample_task/sample.png'), ('corrAns', 'c')])]
    conditionsFile = samplequestion.xlsx
    loopType = sequential
    nReps = 1
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    Routine samtrial
  LoopTerminator trials_3
  Routine analysistrial
  Routine Instr2
  Routine Instructionspart2
  Routine Instructionspart3
  Routine Begin
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images and Correct Answers Part_1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'recoding_task_1/q1.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q2.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q3.png'), ('corrAns', 'b')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q4.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q5.png'), ('corrAns', 'b')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q6.png'), ('corrAns', 'e')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q7.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q8.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q9.png'), ('corrAns', 'e')]),
      OrderedDict([('ImageFile', 'recoding_task_1/q10.png'), ('corrAns', 'e')])]
    Routine trial_1
  LoopTerminator trials
  Routine intermission
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Images and Correct Answers Part_2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('ImageFile', 'recoding_task_2/q11.png'), ('corrAns', 'c')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q12.png'), ('corrAns', 'b')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q13.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q14.png'), ('corrAns', 'e')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q15.png'), ('corrAns', 'b')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q16.png'), ('corrAns', 'a')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q17.png'), ('corrAns', 'e')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q18.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q19.png'), ('corrAns', 'd')]),
      OrderedDict([('ImageFile', 'recoding_task_2/q20.png'), ('corrAns', 'c')])]
    Routine trial_2
  LoopTerminator trials_2
  Routine end
